PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = PAT_PRACTICE_icons
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    TextComponent wel
      color = -1.0000, -1.0000, -1.0000
      font = Consolas
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Welcome to the Friends Game!

        We will now show you how to play this game.

        Press spacebar for a demo.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent Who
      color = -1.0000, -1.0000, -1.0000
      contrast = 4
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent Player1demo
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cooking
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movies
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dancing
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent fashion
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/fashion.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    ImageComponent movie
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent writing
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/writing.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Player_1
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    ImageComponent Player1
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cook
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movie_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dance
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    ImageComponent yes1
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (-0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Player_2
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    ImageComponent player
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fashion_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/fashion.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    ImageComponent movie_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent writing_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/writing.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent yes1_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_14
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
  Routine fix
    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    RoutineSettingsComponent fix
      stopVal [duration (s)] = 3
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    TextComponent text_16
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = +
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  Routine trail2
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    TextComponent Who_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 4
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_15
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent text_17
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent Player1demo_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cooking_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movies_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_19
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dancing_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_20
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent fashion_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/fashion.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_21
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent movie_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_22
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent writing_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/writing.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_23
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine player1_2
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  Routine Player2_2
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  Routine topmod_2
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  Routine topmod
    RoutineSettingsComponent topmod
      stopVal [duration (s)] = 4.5
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    ImageComponent Player1_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cook_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movie_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dance_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_13
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent no
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_down.png
      pos = (0.0,-0.073)
      size = (0.2, 0.3)
      startVal [time (s)] = 2.5
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Flow
  Routine welcome
  Routine welcome
  Routine trial
  Routine Player_1
  Routine Player_2
  Routine topmod
  Routine fix
  Routine trail2
  Routine player1_2
  Routine Player2_2
